PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Units = height
  Window size (pixels) = [1600, 900]
  expName = MotorImageryExperiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine walcome_screen
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    TextComponent textwelcomescreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to this experiment
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    EmotivRecordingComponent cortex_rec plugin="psychopy-emotiv"
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine trial
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    PolygonComponent cross_on_screen
      fillColor = 0.0588, 0.6157, 0.8431
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_cue
      color = 1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.5
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $arrow_direct
    PolygonComponent arrow
      fillColor = 1.0000, -1.0000, -1.0000
      ori [set every repeat] = arrow_orientation
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    PolygonComponent action
      disabled = True
      fillColor = 0.1294, 0.8667, 0.1294
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 4.0
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    TextComponent rest_cue
      letterHeight = 0.1
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 2.5
      text = REST
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    ImageComponent stim_image
      image [set every repeat] = $stim_images
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 4
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet

        # Define stream for event markers (1 channel, irregular sampling rate)
        info = StreamInfo('EventStream', 'Markers', 1, 0, 'string', 'event_marker_stream')

        # Create the outlet
        outlet = StreamOutlet(info)
      Begin Routine:
        condition_triggered = False  # Track if condition has been executed
      Each Frame:
        if arrow.status == STARTED and not condition_triggered:
            outlet.push_sample([arrow_direct])
            print(arrow_direct)
            condition_triggered = True  # Ensure this runs only once
    EmotivMarkingComponent eeg_marker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 0.01
      emotiv_marker_label [set every repeat] = $arrow_direct
      emotiv_marker_value [set every repeat] = 1
      emotiv_stop_marker = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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  Routine goodbye_screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Experiment End

        Thank for participanting
  Routine comfirm
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = If you're ready please enter [spacebar]
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    KeyboardComponent keySpacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine walcome_screen
  Routine comfirm
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cue_stims.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'arrow_direct': 'U', 'arrow_orientation': 0, 'stim_images': 'images/feet.jpg'},
      {'arrow_direct': 'L', 'arrow_orientation': 270, 'stim_images': 'images/left.jpg'},
      {'arrow_direct': 'R', 'arrow_orientation': 90, 'stim_images': 'images/right.jpg'},
      {'arrow_direct': 'D', 'arrow_orientation': 180, 'stim_images': 'images/idle.jpg'}]
    Routine trial
  LoopTerminator trials
  Routine goodbye_screen
